OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0)

Generic stream reader => #0
  Filename = path_to_folder/data_file.ov
#0.Output Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Signal=#0.Output Signal, Stimulation=#0.Output Stimulations -> GDF file writer
  Filename = path_to_folder/converted.gdf
EEG stream=#0.Output Signal, Stimulations=#0.Output Stimulations -> BrainVision Format File Writer
  Filename (header in vhdr format) = path_to_folder/converted.vhdr
  Marker to OV Stimulation dictionary =
  Convert OpenViBE Stimulations to markers = true
  Use full data and marker file names in header = false
Streamed matrix=#0.Output Signal, Input stimulation channel=#0.Output Stimulations -> BrainVision Format file writer (Gipsa)
  Header filename = path_to_folder/converted-gipsa.vhdr
  Binary format = INT_16
